PsychoPy2experiment version="3.2.4"
Settings
  Data filename = 'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': 'linda', 'amp_connected': 'False', 'debug': 'True'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[0.004,0.004,0.004]
  expName = VSD_EEG_motion.Grid_Animation
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Routines
  Routine Break_Screen
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        SCREEN_WIDTH = float(win.size[0])
        SCREEN_HEIGHT = float(win.size[1])
        screen_ratio = SCREEN_HEIGHT / SCREEN_WIDTH
      Begin Routine:
        break_image_width = BreakImageSizeX * BreakImageScale * screen_ratio
        break_image_height = BreakImageSizeY * BreakImageScale
    ImageComponent break_image_1
      image [set every repeat] = $BreakImagePath_1
      pos = (-.5, 0)
      size = (.5, .5)
      startVal [time (s)] = 0.0
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    ImageComponent break_image_2
      image [set every repeat] = $BreakImagePath_2
      pos = (.5,0)
      size = (.5, .5)
      startVal [time (s)] = 0.0
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    KeyboardComponent End_Break_Screen
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome_Screen
    CodeComponent init
      Code Type = Py
      Begin Experiment:
        import time
        import threading
        if expInfo["amp_connected"]:
            import serial
        else:
            from Scripts import dummy_serial as serial

        # Set default values
        Connected = True
        PulseWidth = 0.01
        imageScale = (1.5, 1.5)

        # If debugging, only run each condition once.
        if expInfo["debug"]:
            condition_repeats = 3
            thisExp.abort()
            stim_repeats = 3
        else:
            condition_repeats = 12
            stim_repeats = 3

        #def ReadThread(port):
        #    while Connected:
        #        if port.inWaiting() > 0:
        #            print("0x%X"%ord port.read(1))
        port = serial.Serial("COM3")

        # Start the read thread thread
        #thread = threading.Thread(target=ReadThread, args=(port,))
        #thread.start()

        # Set the port to an initial state
        port.write([0x00])
        time.sleep(PulseWidth)







        #from psychopy import parallel
        #par= parallel.PParallelInpOut32(address=0x278) #set parallel output
        #par.setData(0)
        #pser.setRTS(0)
        #snd='smile'
        #idx=0
        #blklen=3 #number of sounds each block
        #num_tri=75#number of trials for each sound
        #duration=0.25#duration of sound
        #devnum=5
        #o=0
        Interval=.5
        #Natural=0
        #Minimum=250
        #Maximum= 350
      Begin Routine:
        #i=0
        #Nat={}
        # Set Bit 0, Pin 2 of the Output(to Amp) connector
        #port.write([0x01])
        time.sleep(PulseWidth)
      End Experiment:
        # Reset the port to its default state
        port.write([0xFF])
        #time.sleep(PulseWidth)

        # Terminate the read thread
        #Connected = False
        #thread.join(1.0)


         # Close the serial port
        port.close()


        #pser.close()
      End Routine:
        # Reset Bit 0, Pin 2 of the Output(to Amp) connector
        port.write([0x00])
        #time.sleep(PulseWidth)

        #pser=serial.Serial(0)
        #init serial output
        #print order[1:20,:]
    TextComponent Hi
      letterHeight = 0.15
      pos = [0,0.1]
      startVal [time (s)] = 0.0
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      text:
        You will be asked to look for a given picture.

        Count in your head how many times the given picture moves.

        Sit very still and relaxed.
    KeyboardComponent End_Welcome_Screen
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stimulus_Blank_Screen
    CodeComponent code_15
      Code Type = Py
      Begin Experiment:
        import random
      Begin Routine:
        if Targ==Trigger:
             port.write([int(Trigger+32)])
        else:
             port.write([int(Trigger)])
        time.sleep(PulseWidth)

        #randT=random.random()-0.5
        randT=random.randint(13,18)/100 + .004
        print(randT)
        #targeted 175ms ISI
        prevFrameTime = 0
    ImageComponent scene_background_isi
      image = images/grid.objects.png
      size [set every repeat] = $imageScale
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randT
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    PolygonComponent diode_black
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      pos = (-800, -340)
      shape = rectangle
      size = (45, 45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randT
      units = pix
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  Routine Stimulus_Display_Screen
    CodeComponent animation_code
      Code Type = Py
      Begin Experiment:
        #white = [0, 0, 0]
        #black = [1, 1, 1]
        #diode_color = white
        #
        #animationFile = None
        #seconds_per_stim = 1
        #
        fps = int(win.fps())
        print(f"fps = {fps}")
      Begin Routine:
        if Targ==Trigger:
             port.write([int(Trigger+32)])
        else:
             port.write([int(Trigger)])
        time.sleep(PulseWidth)

        #frames_per_stim = fps * seconds_per_stim
        #frameImageNumbers = list(range(300, 0, -frames_per_stim))
        #prevFrameTime = 0
        #animationFile = f"{ObjectPath}/{Object}.000.png"
      Each Frame:
        #if frameN % 4 == 1:
        #    diode_color = white
        #else:
        #    diode_color = black
        #print(frameN, diode_color)

        #print(f"time = {t}")
        #print(f"frame time difference = {t - prevFrameTime}")
        #prevFrameTime = t

        #thisImageNumber = frameImageNumbers.pop()
        #animationFile = f"{ObjectPath}/{Object}.{thisImageNumber:03}.png"
      End Routine:
        # Reset Bit 0, Pin 2 of the Output(to Amp) connector
        port.write([0x00])
        time.sleep(PulseWidth)

        #nextTrial = trials.getFutureTrial(1)
        #ObjectPresentation.image = nextTrial['ObjectPresentation']
        #print(ObjectPresentation.image)

        print(f"time = {t}")
        print(f"frame time difference = {t - prevFrameTime}")
        prevFrameTime = t
    ImageComponent ObjectPresentation
      image [set every frame] = $f"{ObjectPath}/{Object}{frameN:02}.png"
      size [set every repeat] = $imageScale
      startVal [frame N] = 1
      stopVal [duration (frames)] = 48
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    PolygonComponent diode_white
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[1.000,1.000,1.000]
      pos = (-800, -340)
      shape = rectangle
      size = (45, 45)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 1
      units = pix
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    PolygonComponent diode_black_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      pos = (-800, -340)
      shape = rectangle
      size = (45, 45)
      startVal [frame N] = 2
      stopVal [duration (frames)] = 47
      units = pix
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    ImageComponent ObjectPrePresentation
      image = images/grid.objects.png
      size [set every repeat] = $imageScale
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 1
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  Routine Salutation_Screen
    TextComponent bye
      letterHeight = 0.12
      pos = [0, .5]
      startVal [time (s)] = 0.0
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      text:
        Great, you are all done!
    KeyboardComponent key_resp_11
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Wait_Screen
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        Targ = TargetTrigger
    ImageComponent scene_background_prime
      image = images/grid.objects.png
      size [set every repeat] = $imageScale
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent Instructions_Text
      letterHeight = 0.15
      pos = [0, 0.68]
      startVal [time (s)] = 0.0
      text = Look for this picture....
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    KeyboardComponent End_Wait_Screen
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    ImageComponent TargetPres
      image [set every frame] = $f"images/{TargetObject}/{TargetObject}{frameN-60:02}.png"
      size [set every repeat] = $imageScale
      startVal [frame N] = 60
      stopVal [duration (frames)] = 50
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    ImageComponent bg_p_2
      image = images/grid.objects.png
      size [set every repeat] = $imageScale
      startVal [frame N] = 110
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Flow
  Routine Welcome_Screen
  LoopInitiator Trials_Loop loopType="TrialHandler"
    conditionsFile = Parameters/Target.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TargetObject', 'ball'), ('TargetObjectFile', 'images/ball.png'), ('TargetTrigger', 1)]),
      OrderedDict([('TargetObject', 'dog'), ('TargetObjectFile', 'images/dog.png'), ('TargetTrigger', 2)]),
      OrderedDict([('TargetObject', 'flower'), ('TargetObjectFile', 'images/flower.png'), ('TargetTrigger', 3)]),
      OrderedDict([('TargetObject', 'lamp'), ('TargetObjectFile', 'images/lamp.png'), ('TargetTrigger', 4)]),
      OrderedDict([('TargetObject', 'telephone'), ('TargetObjectFile', 'images/telephone.png'), ('TargetTrigger', 5)]),
      OrderedDict([('TargetObject', 'tv'), ('TargetObjectFile', 'images/tv.png'), ('TargetTrigger', 6)])]
    LoopInitiator targetScreen loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = stim_repeats
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      Routine Wait_Screen
    LoopTerminator targetScreen
    LoopInitiator Stimuli_Loop loopType="TrialHandler"
      conditionsFile = Parameters/Stimuli.csv
      isTrials = False
      loopType = random
      nReps = condition_repeats
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      conditions:
        [OrderedDict([('Object', 'ball'), ('ObjectPath', 'images/ball'), ('ObjectFile', 'images/ball.png'), ('ObjectSize', [1, 1]), ('ObjectLocation', [0, 0]), ('Trigger', 1)]),
        OrderedDict([('Object', 'dog'), ('ObjectPath', 'images/dog'), ('ObjectFile', 'images/dog.png'), ('ObjectSize', [1, 1]), ('ObjectLocation', [0, 0]), ('Trigger', 2)]),
        OrderedDict([('Object', 'flower'), ('ObjectPath', 'images/flower'), ('ObjectFile', 'images/flower.png'), ('ObjectSize', [1, 1]), ('ObjectLocation', [0, 0]), ('Trigger', 3)]),
        OrderedDict([('Object', 'lamp'), ('ObjectPath', 'images/lamp'), ('ObjectFile', 'images/lamp.png'), ('ObjectSize', [1, 1]), ('ObjectLocation', [0, 0]), ('Trigger', 4)]),
        OrderedDict([('Object', 'telephone'), ('ObjectPath', 'images/telephone'), ('ObjectFile', 'images/telephone.png'), ('ObjectSize', [1, 1]), ('ObjectLocation', [0, 0]), ('Trigger', 5)]),
        OrderedDict([('Object', 'tv'), ('ObjectPath', 'images/tv'), ('ObjectFile', 'images/tv.png'), ('ObjectSize', [1, 1]), ('ObjectLocation', [0, 0]), ('Trigger', 6)])]
      Routine Stimulus_Blank_Screen
      Routine Stimulus_Display_Screen
    LoopTerminator Stimuli_Loop
    LoopInitiator Break_Loop loopType="TrialHandler"
      Selected rows = $[Trials_Loop.thisN]
      conditionsFile = Parameters/Break.csv
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('BreakExperimentNumber', 1), ('BreakImageCondition', 1), ('BreakImagePath_1', '../Break_Images/Cat.01.png'), ('BreakImagePath_2', '../Break_Images/Dog.01.png'), ('BreakImage_1', 'Cat'), ('BreakImage_2', 'Dog'), ('BreakImageNumber', 1), ('BreakImageExtension', '.png'), ('BreakImageSizeX', 800), ('BreakImageSizeY', 800), ('BreakImagePositionX_1', -0.5), ('BreakImagePositionY_1', 0), ('BreakImagePositionX_2', 0.5), ('BreakImagePositionY_2', 0), ('BreakImageScale', 1.25)]),
        OrderedDict([('BreakExperimentNumber', 1), ('BreakImageCondition', 2), ('BreakImagePath_1', '../Break_Images/Dog.02.png'), ('BreakImagePath_2', '../Break_Images/Giraffe.02.png'), ('BreakImage_1', 'Dog'), ('BreakImage_2', 'Giraffe'), ('BreakImageNumber', 2), ('BreakImageExtension', '.png'), ('BreakImageSizeX', 800), ('BreakImageSizeY', 800), ('BreakImagePositionX_1', -0.5), ('BreakImagePositionY_1', 0), ('BreakImagePositionX_2', 0.5), ('BreakImagePositionY_2', 0), ('BreakImageScale', 1.25)]),
        OrderedDict([('BreakExperimentNumber', 1), ('BreakImageCondition', 3), ('BreakImagePath_1', '../Break_Images/Giraffe.03.png'), ('BreakImagePath_2', '../Break_Images/Cat.03.png'), ('BreakImage_1', 'Giraffe'), ('BreakImage_2', 'Cat'), ('BreakImageNumber', 3), ('BreakImageExtension', '.png'), ('BreakImageSizeX', 800), ('BreakImageSizeY', 800), ('BreakImagePositionX_1', -0.5), ('BreakImagePositionY_1', 0), ('BreakImagePositionX_2', 0.5), ('BreakImagePositionY_2', 0), ('BreakImageScale', 1.25)]),
        OrderedDict([('BreakExperimentNumber', 1), ('BreakImageCondition', 4), ('BreakImagePath_1', '../Break_Images/Cat.04.png'), ('BreakImagePath_2', '../Break_Images/Dog.04.png'), ('BreakImage_1', 'Cat'), ('BreakImage_2', 'Dog'), ('BreakImageNumber', 4), ('BreakImageExtension', '.png'), ('BreakImageSizeX', 800), ('BreakImageSizeY', 800), ('BreakImagePositionX_1', -0.5), ('BreakImagePositionY_1', 0), ('BreakImagePositionX_2', 0.5), ('BreakImagePositionY_2', 0), ('BreakImageScale', 1.25)])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
      Routine Break_Screen
    LoopTerminator Break_Loop
  LoopTerminator Trials_Loop
  Routine Salutation_Screen
